CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:413
GitHash:
ModuleCount:11
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:No filtering
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:(?P<Target>.*)_(?P<Condition>.*)_(?P<Picture>[0-9]{1}.*)_(?P<Channel>.*).tif
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:2
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "ch00")
    Name to assign these images:DNA
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    Select the image type:Grayscale image
    Set intensity range from:Image bit-depth
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    Select the rule criteria:and (file does contain "ch02")
    Name to assign these images:Target
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    Select the image type:Grayscale image
    Set intensity range from:Image bit-depth
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
Groups:[module_num:4|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
    Do you want to group your images?:Yes
    grouping metadata count:2
    Metadata category:Target
    Metadata category:Condition

IdentifyPrimaryObjects:[module_num:5|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
    Select the input image:DNA
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):40,120
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Shape
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Display accepted local maxima?:No
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Adaptive
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    Threshold smoothing scale:1.1
    Threshold correction factor:0.7
    Lower and upper bounds on threshold:0.0,1.0
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    Log transform before thresholding?:No
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    Size of adaptive window:50
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    Thresholding method:Minimum Cross-Entropy

IdentifySecondaryObjects:[module_num:6|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
    Select the input objects:Nuclei
    Name the objects to be identified:Cells
    Select the method to identify the secondary objects:Propagation
    Select the input image:Target
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    Regularization factor:0.05
    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
    Threshold setting version:12
    Threshold strategy:Adaptive
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    Threshold smoothing scale:1.3488
    Threshold correction factor:1
    Lower and upper bounds on threshold:0.0,1.0
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    Log transform before thresholding?:No
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    Size of adaptive window:50
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    Thresholding method:Minimum Cross-Entropy

IdentifyTertiaryObjects:[module_num:7|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
    Select the larger identified objects:Cells
    Select the smaller identified objects:Nuclei
    Name the tertiary objects to be identified:Cytoplasm
    Shrink smaller object prior to subtraction?:Yes

MeasureObjectIntensity:[module_num:8|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
    Select images to measure:DNA
    Select objects to measure:Nuclei

ExportToSpreadsheet:[module_num:9|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Add image file and folder names to your object data file?:No
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:Yes
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:Yes
    Output file location:Elsewhere...|N:\\Viral glycoproteins group\\Private\\Michal Varga\\Data\\Confocal\\MDBK-bRSV-dSH\\Relative-Intensity-Quantification\\Raw_Data
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
    Press button to select measurements:Nuclei|Intensity_MeanIntensity_DNA
    Representation of Nan/Inf:Null
    Add a prefix to file names?:Yes
    Filename prefix:Nuclei_
    Overwrite existing files without warning?:No
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
MeasureObjectIntensity:[module_num:10|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
    Select images to measure:Target
    Select objects to measure:Cytoplasm

ExportToSpreadsheet:[module_num:11|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Add image file and folder names to your object data file?:No
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:Yes
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:Yes
    Output file location:Elsewhere...|N:\\Viral glycoproteins group\\Private\\Michal Varga\\Data\\Confocal\\MDBK-bRSV-dSH\\Relative-Intensity-Quantification\\Raw_Data
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
    Press button to select measurements:Cytoplasm|Intensity_MeanIntensity_Target
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:Target_
    Overwrite existing files without warning?:No
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